PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'partecipante ': '', 'genere (m\\f)': '', 'età': ''}
  Full-screen window = True
  Monitor = prova
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = habitBeauty
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Routines
  Routine selectFace
    CodeComponent code
      Code Type = Py
      End Routine:
        sex = expInfo["genere (m\\f)"]

        faceMale1 = "faces/image120.png"
        faceMale2 = "faces/image198.png"
        faceFemale1 = "faces/image194.png"
        faceFemale2 = "faces/image183.png"

        if sex == "m":
            faces = [faceFemale1, faceFemale2]
            targetFace = random.choice(faces)
            faces.remove(targetFace)
            compFace = faces[0]

        else:
            faces = [faceMale1, faceMale2]
            targetFace = random.choice(faces)
            faces.remove(targetFace)
            compFace = faces[0]

        # add the selected target to the frame data
        frame = pd.read_excel("frame.xlsx")
        frame["selected"] = targetFace

        comparedFaces = pd.read_excel("comparedFaces.xlsx")
        comparedFaces["comparedStimuli"] = [targetFace,compFace]

        # outputs
        # frame with selected face
        frame.to_excel(r'frame.xlsx',index = None,header = True)
        # file for the final comparison
        comparedFaces.to_excel(r'comparedFaces.xlsx',index = None,header = True)
  Routine ratingFaces
    ImageComponent fac
      image [set every repeat] = $comparedStimuli
      size = [6,8]
      startVal [time (s)] = 0.0
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    RatingScaleComponent rating
      forceEndRoutine = True
      high = 7
      low = 1
      marker = slider
      pos = 0, -0.6
      size = 1.0
      startVal [time (s)] = 0.0
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      customize_everything:
        marker = "slider",
        markerStart = 4.0,
        scale = "Per niente attraente                Estremamente attraente",
        size = 1,
        stretch = 1.1,
        pos = [0.0, -0.6],
        tickMarks = [1,2,3,4,5,6,7],
        low = 1,
        high = 7,
        showValue = False,
        textSize = 0.9,
        acceptSize = 1.4,
        acceptPreText = "Trascina la barra",
        acceptText = "Continua",
  Routine instr
    TextComponent text_2
      letterHeight = 0.9
      startVal [time (s)] = 0.0
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      text:
        alignHoriz = "center"

                                                                         Ora vedrai apparire al centro del monitor una croce.

                                                                    Successivamente apparirà un rettangolo verde oppure uno rosso.
        Il tuo compito sarà di premere il più accuratamente e velocemente possibile la freccia a sinistra se il rettangolo è rosso oppure di premere la freccia in su se il rettangolo è verde.

                                                                              Premi la barra spaziatrice per procedere.
    KeyboardComponent instrOk
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
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  Routine instr1
    CodeComponent code_2
      Code Type = Py
      End Routine:
        instructions = ""Ora vedrai apparire al centro del monitor una croce.

        Successivamente apparirà un rettangolo verde oppure uno rosso.
        Il tuo compito sarà di premere il più accuratamente e velocemente possibile la freccia a sinistra se il rettangolo è rosso oppure di premere la freccia in su se il rettangolo è verde.

        Premi la barra spaziatrice per procedere.""

        text = visual.TextStim(win = win, name = text, text = instructions,
        font = "Arial", pos = (0,0), alignHoriz = "center",
        height = 7, wrapWidth = None, ori = 0,
        languageStyle = "LTR",
        depth = -4.0)
  Routine initialInstr
    TextComponent text_3
      font = Comic Sans
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $firstInstr
      units = height
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    KeyboardComponent key_resp_3
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine instr_2
    TextComponent text2
      font = Comic Sans
      letterHeight = 1.2
      startVal [time (s)] = 0.0
      text [set every repeat] = $go
      wrapWidth = 40
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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  Routine discriminationTask
    PolygonComponent fixationCross
      fillColor = $[1,1,1]
      shape = cross
      size = 0.5
      startVal [time (s)] = 0.400
      stopVal [duration (s)] = 1.000
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    ImageComponent frameCond
      image [set every repeat] = $frameFile
      size = [6.2,8.2]
      startVal [time (s)] = 1.600
      stopVal [duration (s)] = 0.216
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    ImageComponent image_4
      image [set every repeat] = $scramble
      size = [6,8]
      startVal [time (s)] = 1.600
      stopVal [duration (s)] = 0.100
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    ImageComponent image
      image [set every repeat] = $selected
      size = [6,8]
      startVal [time (s)] = 1.700
      stopVal [duration (s)] = 0.016
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    ImageComponent image_5
      image [set every repeat] = $scramble
      size = [6,8]
      startVal [time (s)] = 1.716
      stopVal [duration (s)] = 0.100
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    TextComponent text
      letterHeight = 1.2
      startVal [time (s)] = 1.816
      stopVal [duration (s)] = 0.200
      text = ?
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    KeyboardComponent key_resp
      allowedKeys = 'left','up'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 2.016
      stopVal [duration (s)] = 1.000
      storeCorrect = True
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  Routine finalInstr_2
    TextComponent text_4
      font = Comic Sans
      letterHeight = 1.2
      startVal [time (s)] = 0.0
      text [set every repeat] = $finalInstr
      wrapWidth = 40
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine thanks_2
    TextComponent text_5
      font = Comic Sans
      letterHeight = 1.2
      startVal [time (s)] = 0.0
      text [set every repeat] = $thanks
      wrapWidth = 40
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine training
    PolygonComponent fixationCross1
      fillColor = $[1,1,1]
      shape = cross
      size = 0.5
      startVal [time (s)] = 0.400
      stopVal [duration (s)] = 1.000
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    ImageComponent frame1
      image [set every repeat] = $frameFile
      size = [6.2,8.2]
      startVal [time (s)] = 1.600
      stopVal [duration (s)] = 0.216
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    ImageComponent image_2
      image [set every repeat] = $scramble
      size = [6,8]
      startVal [time (s)] = 1.600
      stopVal [duration (s)] = 0.100
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    ImageComponent image_3
      image [set every repeat] = $scramble
      size = [6,8]
      startVal [time (s)] = 1.716
      stopVal [duration (s)] = 0.100
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    TextComponent text_6
      letterHeight = 1.2
      startVal [time (s)] = 1.816
      stopVal [duration (s)] = 0.200
      text = ?
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    KeyboardComponent key_resp_6
      allowedKeys = 'left','up'
      forceEndRoutine = True
      startVal [time (s)] = 2.016
      stopVal [duration (s)] = 1.000
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  Routine trainingInstr
    TextComponent text_7
      font = Comic Sans
      letterHeight = 1.2
      startVal [time (s)] = 0.0
      text [set every repeat] = $discrTaskInstr
      wrapWidth = 40
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    KeyboardComponent key_resp_7
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine gender
    CodeComponent code_3
      Code Type = Py
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      Begin Experiment:
        import pandas as pd
        import os
        import glob
        import random
        import numpy as np
        import math
      Begin Routine:
        df = pd.read_excel("stimuli.xlsx")

        sex = expInfo["genere (m\\f)"]

        # filter
        if sex == "m":
            filters = df.gender=="female"
            gender = df[filters]
        else:
            filters = df.gender=="male"
            gender = df[filters]

        # outputs
        gender[filters].to_excel(r'selectedStimuli.xlsx',index = None)
  Routine initTraining
    TextComponent text_8
      font = Comic Sans
      letterHeight = 1.2
      startVal [time (s)] = 0.0
      text [set every repeat] = $training
      wrapWidth = 40
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine ratingAllFaces
    ImageComponent firstFace
      image [set every repeat] = $imageFile
      size = [0.34,0.40]
      startVal [time (s)] = 0.0
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    SliderComponent slider
      color = Black
      forceEndRoutine = False
      granularity = 1
      labels = ["Per niente attraente","" ,"" ,"" ,"" ,"" ,"Estremamente attraente"]
      pos = (0,-0.3)
      size = (1,0.05)
      startVal [time (s)] = 0.0
      styles = ['rating']
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    KeyboardComponent key_resp_10
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine final_question
    TextComponent text_9
      font = Comic Sans
      letterHeight = 1.2
      pos = (0, 6)
      startVal [time (s)] = 0.0
      wrapWidth = 40
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      text:
        Hai visto qualcosa di preciso apparire al centro dei rettangoli? Se si, che cosa?
        Digita la risposta e premi invio per concludere.
    CodeComponent code_4
      Code Type = Py
      Begin Experiment:
        import string
        allLetters = list (string.ascii_lowercase)
      Begin Routine:
        textFill = ""
        text.setAutoDraw(True)
      Each Frame:
        keys = event.getKeys()
        if "escape" in keys:
            core.quit()
        else:
            if keys:
                if keys [0] == "space":
                    text.text = text.text + ' ' #adds a space instead of "space"
                elif keys [0] == "backspace":
                    text.text = text.text[:-1]
                elif keys [0] in allLetters:
                    textFill += keys [0]
                    text.text= text.text + keys[0]
                elif 'return' in keys:
                    continueRoutine = False
      End Routine:
        thisExp.addData("saw anything?", text.text)
        text.setAutoDraw(False)
  Routine break_2
    TextComponent text_10
      letterHeight = 1.2
      startVal [time (s)] = 0.0
      text = Prenditi una pausa. Quando vuoi ricominciare rimettiti in posizione e premi la barra spaziatrice.
      wrapWidth = 40
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine gender
  LoopInitiator trials_3 loopType="TrialHandler"
    conditions = [OrderedDict([('firstInstr', 'Per iniziare vedrai comparire al centro del monitor una serie di volti.\nIl tuo compito sarà di indicare quanto attraente è per te ciascun volto, assegnandogli un punteggio compreso tra [1] "Per niente attraente" e [7] "Estremamente attraente".\n\nPer farlo ti sarà sufficiente trascinare la barra in basso e premere "Continua".\n\n- Per continuare premi la barra spaziatrice -'), ('discrTaskInstr', "Nel prossimo compito vedrai apparire al centro del monitor un rettangolo colorato.\n\nIl tuo compito sarà di indicare il colore del rettangolo premendo nella tastiera la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
    conditionsFile = instr.xlsx
    loopType = random
    nReps = 1
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    Routine initialInstr
  LoopTerminator trials_3
  LoopInitiator trials_7 loopType="TrialHandler"
    conditionsFile = selectedStimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('imageFile', 'faces/CFD-WM-029-023-N.jpg'), ('gender', 'male')]),
      OrderedDict([('imageFile', 'faces/CFD-WM-033-025-N.jpg'), ('gender', 'male')]),
      OrderedDict([('imageFile', 'faces/CFD-WM-235-147-N.jpg'), ('gender', 'male')]),
      OrderedDict([('imageFile', 'faces/CFD-WM-253-119-N.jpg'), ('gender', 'male')]),
      OrderedDict([('imageFile', 'faces/CFD-WM-205-007-N.jpg'), ('gender', 'male')]),
      OrderedDict([('imageFile', 'faces/CFD-WM-231-112-N.jpg'), ('gender', 'male')]),
      OrderedDict([('imageFile', 'faces/CFD-WM-009-002-N.jpg'), ('gender', 'male')]),
      OrderedDict([('imageFile', 'faces/CFD-WM-230-131-N.jpg'), ('gender', 'male')]),
      OrderedDict([('imageFile', 'faces/CFD-WM-211-054-N.jpg'), ('gender', 'male')]),
      OrderedDict([('imageFile', 'faces/CFD-WM-203-023-N.jpg'), ('gender', 'male')])]
    Routine ratingAllFaces
  LoopTerminator trials_7
  Routine selectFace
  LoopInitiator trials_2 loopType="TrialHandler"
    conditions = [OrderedDict([('firstInstr', 'Di seguito vedrai una serie di volti.\nIl tuo compito sarà di valutarne la piacevolezza in una scala che va da "Per nulla piacevole" [1] a "Estremamente piacevole" [7].\n\nPer farlo ti sarà sufficiente trascinare la barra in basso e premere "Continua".\n\nPer continuare premi la barra spaziatrice.'), ('discrTaskInstr', 'Ora vedrai apparire al centro del monitor una croce.\n\nSuccessivamente apparirà un rettangolo verde oppure uno rosso.\nInfine apparirà un punto interrogativo.\n\nIl tuo compito sarà di premere il più accuratamente e velocemente possibile la frecci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
    conditionsFile = instr.xlsx
    loopType = random
    nReps = 1
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    Routine trainingInstr
  LoopTerminator trials_2
  Routine initTraining
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = frame.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('frameFile', 'frames/rossa.png'), ('corrAns', 'left'), ('selected', 'faces/2.jpg')]),
      OrderedDict([('frameFile', 'frames/verde.png'), ('corrAns', 'up'), ('selected', 'faces/2.jpg')])]
    Routine training
  LoopTerminator trials
  LoopInitiator trials_4 loopType="TrialHandler"
    conditions = [OrderedDict([('firstInstr', 'Di seguito vedrai una serie di volti.\nIl tuo compito sarà di valutarne la piacevolezza in una scala che va da "Per nulla piacevole" [1] a "Estremamente piacevole" [7].\n\nPer farlo ti sarà sufficiente trascinare la barra in basso e premere "Continua"\nPer continuare premi la barra spaziatrice.'), ('discrTaskInstr', 'Ora vedrai apparire al centro del monitor una croce.\n\nSuccessivamente apparirà un rettangolo verde oppure uno rosso.\nIl tuo compito sarà di premere il più accuratamente e velocemente possibile la freccia verso su  se il rettangolo è verde oppure di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
    conditionsFile = instr.xlsx
    loopType = random
    nReps = 1
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    Routine instr_2
  LoopTerminator trials_4
  LoopInitiator trials_8 loopType="TrialHandler"
    loopType = random
    nReps = 1
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    LoopInitiator discrTask loopType="TrialHandler"
      conditionsFile = frame.xlsx
      loopType = random
      nReps = 5
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      conditions:
        [OrderedDict([('frameFile', 'frames/rossa.png'), ('corrAns', 'left'), ('selected', 'faces/CFD-WM-205-007-N.jpg'), ('comparison', None), ('scramble', 'scramble/CFD-WF-205-006-N_scramble.jpg')]),
        OrderedDict([('frameFile', 'frames/verde.png'), ('corrAns', 'up'), ('selected', 'faces/CFD-WM-205-007-N.jpg'), ('comparison', None), ('scramble', 'scramble/CFD-WF-205-006-N_scramble.jpg')])]
      Routine discriminationTask
    LoopTerminator discrTask
    Routine break_2
  LoopTerminator trials_8
  LoopInitiator trials_5 loopType="TrialHandler"
    conditions = [OrderedDict([('firstInstr', 'Di seguito vedrai una serie di volti.\nIl tuo compito sarà di valutarne la piacevolezza in una scala che va da "Per nulla piacevole" [1] a "Estremamente piacevole" [7].\n\nPer farlo ti sarà sufficiente trascinare la barra in basso e premere "Continua"\nPer continuare premi la barra spaziatrice.'), ('discrTaskInstr', 'Ora vedrai apparire al centro del monitor una croce.\n\nSuccessivamente apparirà un rettangolo verde oppure uno rosso.\nIl tuo compito sarà di premere il più accuratamente e velocemente possibile la freccia verso su  se il rettangolo è verde oppure di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
    conditionsFile = instr.xlsx
    loopType = random
    nReps = 1
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    Routine finalInstr_2
  LoopTerminator trials_5
  LoopInitiator ratingPost loopType="TrialHandler"
    conditionsFile = comparedFaces.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('comparedStimuli', 'faces/CFD-WF-205-006-N.jpg')]),
      OrderedDict([('comparedStimuli', 'faces/CFD-WF-208-068-N.jpg')])]
    Routine ratingFaces
  LoopTerminator ratingPost
  Routine final_question
  LoopInitiator trials_6 loopType="TrialHandler"
    conditions = [OrderedDict([('firstInstr', 'Di seguito vedrai una serie di volti.\nIl tuo compito sarà di valutarne la piacevolezza in una scala che va da "Per nulla piacevole" [1] a "Estremamente piacevole" [7].\n\nPer farlo ti sarà sufficiente trascinare la barra in basso e premere "Continua"\nPer continuare premi la barra spaziatrice.'), ('discrTaskInstr', 'Ora vedrai apparire al centro del monitor una croce.\n\nSuccessivamente apparirà un rettangolo verde oppure uno rosso.\nIl tuo compito sarà di premere il più accuratamente e velocemente possibile la freccia verso su  se il rettangolo è verde oppure di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
    conditionsFile = instr.xlsx
    loopType = random
    nReps = 1
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    Routine thanks_2
  LoopTerminator trials_6
